includeFile = TSEScore.txt
i:Ts/Seed = 0
i:Ts/NumberOfThreads = 14
b:Ts/DumpNonDefaultParameters = "True"
b:Ts/ShowCPUTime                = "True"


##### source type: "PhaseSpace"
s:Ge/PlanePosition/Parent = "Nozzle"
s:Ge/PlanePosition/Type = "Group"
d:Ge/PlanePosition/TransX = 0. cm
d:Ge/PlanePosition/TransY = 0. cm
d:Ge/PlanePosition/TransZ = 26.7 cm
d:Ge/PlanePosition/RotX = 0.  deg
d:Ge/PlanePosition/RotY = 0.  deg
d:Ge/PlanePosition/RotZ = 0. deg

#i:So/ElectronVarian/NumberOfHistoriesInRun = 100

#s:Gr/ViewA/ColorBy = "ParticleType"
#sv:Gr/ViewA/ColorByParticleTypeNames = 5 "e-" "gamma" "proton" "neutron" "opticalphoton" 
#sv:Gr/ViewA/ColorByParticleTypeColors = 5 "red" "magenta" "blue" "yellow" "green"
#s:Gr/ViewA/Type             = "OpenGL"
#i:Gr/ViewA/WindowSizeX      = 1024
#i:Gr/ViewA/WindowSizeY      = 768
#b:Gr/ViewA/IncludeAxes      = "True"
#d:Gr/ViewA/Theta            = 90 deg
#d:Gr/ViewA/Phi              = 90 deg
#s:Gr/ViewA/Projection       = "Perspective"
#d:Gr/ViewA/PerspectiveAngle = 30 deg
#u:Gr/ViewA/Zoom             = 1.2

#b:Ts/PauseBeforeQuit = "True"
